PsychoPy2experiment version="2024.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = main
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine fixaion_cross
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    UnknownComponent fixaion_cross_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    PolygonComponent a_border_cross
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = -0.1461, -0.1461, -0.1461
      lineWidth = 2
      pos = (-0.5, -0.4)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent l_border_cross
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = -0.1461, -0.1461, -0.1461
      lineWidth = 2
      pos = (0.5, -0.4)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent label_a_cross
      color = black
      letterHeight = 0.03
      pos = (-0.5, -0.46)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = < 500
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    TextComponent label_l_cross
      color = black
      letterHeight = 0.03
      pos = (0.5, -0.46)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = > 500
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    TextComponent a_key_cross
      color = black
      letterHeight = 0.05
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = A
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    TextComponent l_key_cross
      color = black
      letterHeight = 0.05
      pos = (0.5, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = L
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    TextComponent fixation_cross_text
      letterHeight = 0.1
      pos = (0, 0.0925)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine rt_trial
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    UnknownComponent rt_trial_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    PolygonComponent a_border_rt
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = -0.1461, -0.1461, -0.1461
      lineWidth = 2
      pos = (-0.5, -0.4)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
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    PolygonComponent l_border_rt
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = -0.1461, -0.1461, -0.1461
      lineWidth = 2
      pos = (0.5, -0.4)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
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    TextComponent label_a_rt
      color = black
      letterHeight = 0.03
      pos = (-0.5, -0.46)
      startVal [time (s)] = 0.0
      text = < 500
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    TextComponent label_l_rt
      color = black
      letterHeight = 0.03
      pos = (0.5, -0.46)
      startVal [time (s)] = 0.0
      text = > 500
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    TextComponent a_key_rt
      color = black
      letterHeight = 0.05
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      text = A
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    TextComponent l_key_rt
      color = black
      letterHeight = 0.05
      pos = (0.5, -0.4)
      startVal [time (s)] = 0.0
      text = L
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    TextComponent stim_1
      letterHeight = 0.03
      pos [set every repeat] = pos1
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim1
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    TextComponent stim_2
      letterHeight = 0.03
      pos [set every repeat] = pos2
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim2
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    TextComponent stim_3
      letterHeight = 0.03
      pos [set every repeat] = pos3
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim3
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    TextComponent stim_4
      letterHeight = 0.03
      pos [set every repeat] = pos4
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim4
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    TextComponent stim_5
      letterHeight = 0.03
      pos [set every repeat] = pos5
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim5
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    TextComponent stim_6
      letterHeight = 0.03
      pos [set every repeat] = pos6
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim6
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    TextComponent stim_7
      letterHeight = 0.03
      pos [set every repeat] = pos7
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim7
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    TextComponent stim_8
      letterHeight = 0.03
      pos [set every repeat] = pos8
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim8
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    TextComponent stim_9
      letterHeight = 0.03
      pos [set every repeat] = pos9
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim9
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    TextComponent stim_10
      letterHeight = 0.03
      pos [set every repeat] = pos10
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim10
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    TextComponent stim_11
      letterHeight = 0.03
      pos [set every repeat] = pos11
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim11
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    TextComponent stim_12
      letterHeight = 0.03
      pos [set every repeat] = pos12
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim12
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    KeyboardComponent key_resp
      allowedKeys = 'a', 'l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_rt
      Code Type = JS
      Before JS Experiment:
        var feedback_text = "False!"
        var feedback_colour = colour_false
      Begin JS Experiment:
        var true_mean
        var trial_type
      Begin JS Routine:
        true_mean = stim[block_i]['mean'][trial_i]
        trial_type = stim[block_i]['trial_type'][trial_i]

        console.log("true mean =", true_mean)
      End JS Routine:
        feedback_colour = colour_false;
        feedback_text = 'False!';

        if (block_i == 0) { //practice block
            if (true_mean < 500 & key_resp.keys == 'a'){
                feedback_text = 'Correct!';
            } else if (true_mean > 500 & key_resp.keys == 'l') {
                feedback_text = 'Correct!';
            }
        } else { //burn_in and test blocks
            feedback_text = '';
        }

        if (key_resp.rt < 0.51 & trial_type != 'attention') { //Fast guess
            if (block_i == 0) {
                feedback_text += "\nToo fast!"
            } else {
                feedback_text += "Too fast!"
            }
        }

        ITI_length = 0.3

        if(trial_i == block_stim1.length-1){
            ITI_length = 0
        }

        console.log(true_mean, key_resp.keys, feedback_text)
  Routine feedback
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    UnknownComponent feedback_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    PolygonComponent a_border_fb
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = -0.1461, -0.1461, -0.1461
      lineWidth = 2
      pos = (-.5,-0.4)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $feedback_length
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    PolygonComponent l_border_fb
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = -0.1461, -0.1461, -0.1461
      lineWidth = 2
      pos = (.5,-0.4)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_length
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    TextComponent label_a_fb
      color = black
      letterHeight = 0.03
      pos = (-.5,-0.46)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_length
      text = < 500
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    TextComponent label_l_fb
      color = black
      letterHeight = 0.03
      pos = (.5,-0.46)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_length
      text = > 500
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    TextComponent a_key_fb
      color = black
      letterHeight = 0.05
      pos = (-.5,-0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_length
      text = A
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    TextComponent l_key_fb
      color = black
      letterHeight = 0.05
      pos = (.5,-0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_length
      text = L
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    TextComponent text_fb
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos [set every repeat] = (0, 0.0925)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_length
      text [set every repeat] = $feedback_text
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    CodeComponent code_fb
      Code Type = JS
      Begin JS Routine:
        console.log("begin routine feedback text:", feedback_text)
      End JS Routine:
        console.log("end routine feedback text :", feedback_text)

        psychoJS.experiment.addData('mean', block_mean[trial_i]);
        psychoJS.experiment.addData('session', (parseInt(expInfo["session"])));
        psychoJS.experiment.addData('group', group);

        psychoJS.experiment.addData('feedback_text', feedback_text);
        psychoJS.experiment.addData('block', block_i);
        psychoJS.experiment.addData('trial', trial_i);
        psychoJS.experiment.addData('trial_type', trial_type);
        psychoJS.experiment.addData('Fullscreen', isFullscreen());
        //psychoJS.experiment.addData('screen_height', screen_height);
        //psychoJS.experiment.addData('height_pixel', $(window).height());
        //psychoJS.experiment.addData('width_pixel', $(window).width());
  Routine ITI
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    UnknownComponent ITI_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    PolygonComponent a_border_rt_2
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = -0.1461, -0.1461, -0.1461
      lineWidth = 2
      pos = (-0.5, -0.4)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_length
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    PolygonComponent l_border_rt_2
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = -0.1461, -0.1461, -0.1461
      lineWidth = 2
      pos = (0.5, -0.4)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_length
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    TextComponent label_a_rt_2
      color = black
      letterHeight = 0.03
      pos = (-0.5, -0.46)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_length
      text = < 500
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    TextComponent label_l_rt_2
      color = black
      letterHeight = 0.03
      pos = (0.5, -0.46)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_length
      text = > 500
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    TextComponent a_key_rt_2
      color = black
      letterHeight = 0.05
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_length
      text = A
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    TextComponent l_key_rt_2
      color = black
      letterHeight = 0.05
      pos = (0.5, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_length
      text = L
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    CodeComponent code
      Code Type = JS
      End JS Routine:
        trial_i +=1

        stim1 = block_stim1[trial_i]
        stim2 = block_stim2[trial_i]
        stim3 = block_stim3[trial_i]
        stim4 = block_stim4[trial_i]
        stim5 = block_stim5[trial_i]
        stim6 = block_stim6[trial_i]
        stim7 = block_stim7[trial_i]
        stim8 = block_stim8[trial_i]
        stim9 = block_stim9[trial_i]
        stim10 = block_stim10[trial_i]
        stim11 = block_stim11[trial_i]
        stim12 = block_stim12[trial_i]
        stim13 = block_stim13[trial_i]
        stim14 = block_stim14[trial_i]
        stim15 = block_stim15[trial_i]
        stim16 = block_stim16[trial_i]

        x_1 = block_x_pos1[trial_i]
        y_1 = block_y_pos1[trial_i]
        x_2 = block_x_pos2[trial_i]
        y_2 = block_y_pos2[trial_i]
        x_3 = block_x_pos3[trial_i]
        y_3 = block_y_pos3[trial_i]
        x_4 = block_x_pos4[trial_i]
        y_4 = block_y_pos4[trial_i]
        x_5 = block_x_pos5[trial_i]
        y_5 = block_y_pos5[trial_i]
        x_6 = block_x_pos6[trial_i]
        y_6 = block_y_pos6[trial_i]
        x_7 = block_x_pos7[trial_i]
        y_7 = block_y_pos7[trial_i]
        x_8 = block_x_pos8[trial_i]
        y_8 = block_y_pos8[trial_i]
        x_9 = block_x_pos9[trial_i]
        y_9 = block_y_pos9[trial_i]
        x_10 = block_x_pos10[trial_i]
        y_10 = block_y_pos10[trial_i]
        x_11 = block_x_pos11[trial_i]
        y_11 = block_y_pos11[trial_i]
        x_12 = block_x_pos12[trial_i]
        y_12 = block_y_pos12[trial_i]
        x_13 = block_x_pos13[trial_i]
        y_13 = block_y_pos13[trial_i]
        x_14 = block_x_pos14[trial_i]
        y_14 = block_y_pos14[trial_i]
        x_15 = block_x_pos15[trial_i]
        y_15 = block_y_pos15[trial_i]
        x_16 = block_x_pos16[trial_i]
        y_16 = block_y_pos16[trial_i]

        pos1 = [x_1, y_1]
        pos2 = [x_2, y_2]
        pos3 = [x_3, y_3]
        pos4 = [x_4, y_4]
        pos5 = [x_5, y_5]
        pos6 = [x_6, y_6]
        pos7 = [x_7, y_7]
        pos8 = [x_8, y_8]
        pos9 = [x_9, y_9]
        pos10 = [x_10, y_10]
        pos11 = [x_11, y_11]
        pos12 = [x_12, y_12]
        pos13 = [x_13, y_13]
        pos14 = [x_14, y_14]
        pos15 = [x_15, y_15]
        pos16 = [x_16, y_16]

        console.log("Block_i = ", block_i)
        console.log("trial_i = ", trial_i)
  Routine countdown
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    UnknownComponent countdown_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    PolygonComponent a_border1
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = -0.1461, -0.1461, -0.1461
      lineWidth = 2
      pos = (-.5,-0.4)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    PolygonComponent l_border1
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = -0.1461, -0.1461, -0.1461
      lineWidth = 2
      pos = (.5,-0.4)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent label_a1
      color = black
      letterHeight = 0.03
      pos = (-.5,-0.46)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = < 500
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    TextComponent label_l1
      color = black
      letterHeight = 0.03
      pos = (.5,-0.46)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = > 500
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    TextComponent a_key1
      color = black
      letterHeight = 0.05
      pos = (-.5,-0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = A
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    TextComponent l_key1
      color = black
      letterHeight = 0.05
      pos = (.5,-0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = L
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    TextComponent count5
      color = black
      letterHeight = 0.2
      pos = (0, 0.0925)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = •••••
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    TextComponent count4
      color = black
      letterHeight = 0.2
      pos = (0, 0.0925)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text = ••••
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    TextComponent count3
      color = black
      letterHeight = 0.2
      pos = (0,0.0925)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1
      text = •••
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    TextComponent count2
      color = black
      letterHeight = 0.2
      pos = (0, 0.0925)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1
      text = ••
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    TextComponent count1
      color = black
      letterHeight = 0.2
      pos = (0, 0.0925)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1
      text = •
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  Routine instruction_practice
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    UnknownComponent instruction_practice_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    PolygonComponent header_border1231
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .44)
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent header_text1231
      letterHeight = 0.05
      pos = (0, .44)
      startVal [time (s)] = 0.0
      text = Your Task
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    TextComponent info1231
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = $'To familiarize yourself with the task, you will work on a few practice rounds now.\n\nPlease place your index fingers on the keys "A" and "L". It is important that you keep your index fingers on these keys throughout all rounds.\n\nAs a reminder:\nPress the "A" key for the answer "' + smaller + '" (i.e.,\u00A0the mean of the numbers displayed is smaller than 500), and the "L" key for the answer "' + larger + '" (i.e.,\u00A0the mean of the numbers displayed is larger than 500).'
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    PolygonComponent continue_info1231
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent continue_border1231
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
      text = To start the practice rounds, please press the spacebar.
      wrapWidth = 3
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    KeyboardComponent key_resp1231
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine prep
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    UnknownComponent prep_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    CodeComponent code_prep
      Code Type = JS
      Before JS Experiment:
        var block_i = -1;
        var trial_i = 0;
        var ITI_length = 0.3;
        var feedback_length = 1.2;
        var colour_false = [0.7255, -0.8431, -0.5294]
        var colour_correct = [-1.0000, 0.0039, -1.0000]
        var block_nr = "1st"
        var smaller = "<\u00A0500";
        var larger = ">\u00A0500";

        var guess_instruction = "Please take an EDUCATED GUESS. This means that you should choose the answer that seems most probable at first glance, even without complete certainty of its correctness."
        var control_instruction = "Please only select an answer once you feel FULLY CONFIDENT about your choice."
        var guess_instruction_1 = "take an EDUCATED GUESS. This means that you should choose the answer that seems most probable at first glance, even without complete certainty of its correctness."
        var control_instruction_1 = "only select an answer once you feel FULLY CONFIDENT about your choice."
        var instruction = ""
        var instruction_1 = ""

        var interim_prequ = ""
        var interim_header_postqu = "Your Task"
        var interim_postqu = "Feel free to take a break now.\n\nPlease continue to stay in fullscreen mode, meaning do NOT exit even during the break."
        var interim_footer_postqu = "Please press the spacebar to continue."

        var block_stim1 = [];
        var block_stim2 = [];
        var block_stim3 = [];
        var block_stim4 = [];
        var block_stim5 = [];
        var block_stim6 = [];
        var block_stim7 = [];
        var block_stim8 = [];
        var block_stim9 = [];
        var block_stim10 = [];
        var block_stim11 = [];
        var block_stim12 = [];
        var block_stim13 = [];
        var block_stim14 = [];
        var block_stim15 = [];
        var block_stim16 = [];

        var stim1 = ''
        var stim2 = ''
        var stim3 = ''
        var stim4 = ''
        var stim5 = ''
        var stim6 = ''
        var stim7 = ''
        var stim8 = ''
        var stim9 = ''
        var stim10 = ''
        var stim11 = ''
        var stim12 = ''
        var stim13 = ''
        var stim14 = ''
        var stim15 = ''
        var stim16 = ''

        var stimuli_x_pos1 = ''
        var stimuli_y_pos1 = ''
        var stimuli_x_pos2 = ''
        var stimuli_y_pos2 = ''
      Begin JS Routine:
        //Save date within
        dat = new Date();
        date_within = dat.getFullYear() +"-"+ (dat.getMonth()+1) +"-"+ dat.getDate() +" "+ dat.getHours() +":"+ dat.getMinutes() +":"+ dat.getSeconds();
        psychoJS.experiment.addData("date_within", date_within);

        console.log("Prep code beginn: block_i = ", block_i, "trial_i = ", trial_i)
        block_i +=1

        block_stim1 = stim[block_i]['stim1'];
        block_stim2 = stim[block_i]['stim2'];
        block_stim3 = stim[block_i]['stim3'];
        block_stim4 = stim[block_i]['stim4'];
        block_stim5 = stim[block_i]['stim5'];
        block_stim6 = stim[block_i]['stim6'];
        block_stim7 = stim[block_i]['stim7'];
        block_stim8 = stim[block_i]['stim8'];
        block_stim9 = stim[block_i]['stim9'];
        block_stim10 = stim[block_i]['stim10'];
        block_stim11 = stim[block_i]['stim11'];
        block_stim12 = stim[block_i]['stim12'];
        block_stim13 = stim[block_i]['stim13'];
        block_stim14 = stim[block_i]['stim14'];
        block_stim15 = stim[block_i]['stim15'];
        block_stim16 = stim[block_i]['stim16'];
        block_mean = stim[block_i]['mean'];

        block_x_pos1 = stim[block_i]['x_pos1'];
        block_y_pos1 = stim[block_i]['y_pos1'];
        block_x_pos2 = stim[block_i]['x_pos2'];
        block_y_pos2 = stim[block_i]['y_pos2'];
        block_x_pos3 = stim[block_i]['x_pos3'];
        block_y_pos3 = stim[block_i]['y_pos3'];
        block_x_pos4 = stim[block_i]['x_pos4'];
        block_y_pos4 = stim[block_i]['y_pos4'];
        block_x_pos5 = stim[block_i]['x_pos5'];
        block_y_pos5 = stim[block_i]['y_pos5'];
        block_x_pos6 = stim[block_i]['x_pos6'];
        block_y_pos6 = stim[block_i]['y_pos6'];
        block_x_pos7 = stim[block_i]['x_pos7'];
        block_y_pos7 = stim[block_i]['y_pos7'];
        block_x_pos8 = stim[block_i]['x_pos8'];
        block_y_pos8 = stim[block_i]['y_pos8'];
        block_x_pos9 = stim[block_i]['x_pos9'];
        block_y_pos9 = stim[block_i]['y_pos9'];
        block_x_pos10 = stim[block_i]['x_pos10'];
        block_y_pos10 = stim[block_i]['y_pos10'];
        block_x_pos11 = stim[block_i]['x_pos11'];
        block_y_pos11 = stim[block_i]['y_pos11'];
        block_x_pos12 = stim[block_i]['x_pos12'];
        block_y_pos12 = stim[block_i]['y_pos12'];
        block_x_pos13 = stim[block_i]['x_pos13'];
        block_y_pos13 = stim[block_i]['y_pos13'];
        block_x_pos14 = stim[block_i]['x_pos14'];
        block_y_pos14 = stim[block_i]['y_pos14'];
        block_x_pos15 = stim[block_i]['x_pos15'];
        block_y_pos15 = stim[block_i]['y_pos15'];
        block_x_pos16 = stim[block_i]['x_pos16'];
        block_y_pos16 = stim[block_i]['y_pos16'];

        trial_i = 0;

        stim1 = block_stim1[trial_i]
        stim2 = block_stim2[trial_i]
        stim3 = block_stim3[trial_i]
        stim4 = block_stim4[trial_i]
        stim5 = block_stim5[trial_i]
        stim6 = block_stim6[trial_i]
        stim7 = block_stim7[trial_i]
        stim8 = block_stim8[trial_i]
        stim9 = block_stim9[trial_i]
        stim10 = block_stim10[trial_i]
        stim11 = block_stim11[trial_i]
        stim12 = block_stim12[trial_i]
        stim13 = block_stim13[trial_i]
        stim14 = block_stim14[trial_i]
        stim15 = block_stim15[trial_i]
        stim16 = block_stim16[trial_i]

        x_1 = block_x_pos1[trial_i]
        y_1 = block_y_pos1[trial_i]
        x_2 = block_x_pos2[trial_i]
        y_2 = block_y_pos2[trial_i]
        x_3 = block_x_pos3[trial_i]
        y_3 = block_y_pos3[trial_i]
        x_4 = block_x_pos4[trial_i]
        y_4 = block_y_pos4[trial_i]
        x_5 = block_x_pos5[trial_i]
        y_5 = block_y_pos5[trial_i]
        x_6 = block_x_pos6[trial_i]
        y_6 = block_y_pos6[trial_i]
        x_7 = block_x_pos7[trial_i]
        y_7 = block_y_pos7[trial_i]
        x_8 = block_x_pos8[trial_i]
        y_8 = block_y_pos8[trial_i]
        x_9 = block_x_pos9[trial_i]
        y_9 = block_y_pos9[trial_i]
        x_10 = block_x_pos10[trial_i]
        y_10 = block_y_pos10[trial_i]
        x_11 = block_x_pos11[trial_i]
        y_11 = block_y_pos11[trial_i]
        x_12 = block_x_pos12[trial_i]
        y_12 = block_y_pos12[trial_i]
        x_13 = block_x_pos13[trial_i]
        y_13 = block_y_pos13[trial_i]
        x_14 = block_x_pos14[trial_i]
        y_14 = block_y_pos14[trial_i]
        x_15 = block_x_pos15[trial_i]
        y_15 = block_y_pos15[trial_i]
        x_16 = block_x_pos16[trial_i]
        y_16 = block_y_pos16[trial_i]

        pos1 = [x_1, y_1]
        pos2 = [x_2, y_2]
        pos3 = [x_3, y_3]
        pos4 = [x_4, y_4]
        pos5 = [x_5, y_5]
        pos6 = [x_6, y_6]
        pos7 = [x_7, y_7]
        pos8 = [x_8, y_8]
        pos9 = [x_9, y_9]
        pos10 = [x_10, y_10]
        pos11 = [x_11, y_11]
        pos12 = [x_12, y_12]
        pos13 = [x_13, y_13]
        pos14 = [x_14, y_14]
        pos15 = [x_15, y_15]
        pos16 = [x_16, y_16]

        console.log("Prep code end: block_i = ", block_i, "trial_i = ", trial_i, "block_stim1.length =", block_stim1.length)

        if (block_i == 2) {
            block_nr = "1st"
        } else if (block_i == 3){
            block_nr = "2nd"
        } else if (block_i == 4) {
            block_nr = "3rd"
        } else {
            block_nr = "last"
        }

        interim_prequ = "You have completed the " + block_nr + " of 4 blocks of the test phase."

        if (block_i == 5) {
            interim_footer_postqu = "Please press the spacebar to be forwarded to the questionnaire."
        } else {
            interim_footer_postqu = "Please press the spacebar to continue."
        }

        if (block_i < 5){
            interim_header_postqu = "Your Task"
            interim_postqu = "Feel free to take a break now.\n\nPlease continue to stay in fullscreen mode, meaning do NOT exit even during the break."
            interim_header = "Your Task"
            interim = ""
            interim_footer = "Please press the spacebar to continue."
        }else{
            interim_header_postqu = "Well done!"
            interim_postqu = "You have successfully completed the test phase. " +
            "You will now be forwarded to a short questionnaire." +  "\n\n" +
            'For this, you will be redirected to a new page after pressing the spacebar. Please wait for the pop-up window that says, "Terminating the experiment. Please wait a few seconds," to disappear. Then, click "OK" on the subsequent pop-up window.' +
            "\n\nPlease do NOT close the browser window!"
        }
  Routine instruction_guess
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    UnknownComponent instruction_guess_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    CodeComponent code_3
      Code Type = JS
      Begin JS Routine:
        if (group == "control"){
            instruction = control_instruction
            instruction_1 = control_instruction_1
        }else{// group == "guess"
            instruction = guess_instruction
            instruction_1 = guess_instruction_1
            }
    PolygonComponent header_border121
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .44)
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent header_text121
      letterHeight = 0.05
      pos = (0, .44)
      startVal [time (s)] = 0.0
      text = Your Task
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    TextComponent info121
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $'You have completed the practice rounds.\n\nIn the following test phase, you will continue with the numerical task.\nHowever, from now on, please ' + instruction_1
    PolygonComponent continue_info121
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent continue_border121
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
      text = Please press the spacebar to continue.
      wrapWidth = 3
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    KeyboardComponent key_resp121
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine instruction_burn2
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    UnknownComponent instruction_burn2_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    PolygonComponent header_border2
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .44)
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent header_text2
      letterHeight = 0.05
      pos = (0, .44)
      startVal [time (s)] = 0.0
      text = Your Task
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    TextComponent info2
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = $'Please place your index fingers on the keys "A" ("' + smaller + '") and "L" ("' + larger + '").\nIt is important that you keep your index fingers on these keys throughout all rounds.'
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    PolygonComponent continue_info2
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent continue_border2
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
      text = To start the warm-up rounds, please press the spacebar.
      wrapWidth = 3
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    KeyboardComponent key_resp2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructuon_burn1
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    UnknownComponent instructuon_burn1_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    PolygonComponent header_border123123
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .44)
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent header_text123123
      letterHeight = 0.05
      pos = (0, .44)
      startVal [time (s)] = 0.0
      text = Your Task
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    TextComponent info123123
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Before starting with the test phase, you will engage in a few warm-up rounds to familiarize yourself with the instruction to ' + instruction_1 + '\n\nPLEASE NOTE:\n From now on, you will no longer receive feedback on the correctness of your answers.'
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    PolygonComponent continue_info123123
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent continue_border123123
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
      text = Please press the spacebar to continue.
      wrapWidth = 3
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    KeyboardComponent key_resp123123
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_test1
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    UnknownComponent instructions_test1_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    PolygonComponent header_border3
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .44)
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent header_text3
      letterHeight = 0.05
      pos = (0, .44)
      startVal [time (s)] = 0.0
      text = Your Task
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    TextComponent info3
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $'You have now completed all warm-up rounds.\n\n During the test phase, you will work on 4 blocks, consisting of approximately 100\u00A0rounds each. After each test block, you will have time for a break.\n\n As a reminder:\n You are supposed to ' + instruction_1 
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    PolygonComponent continue_info3
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent continue_border3
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
      text = Please press the spacebar to continue.
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    KeyboardComponent key_resp3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_test2
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    UnknownComponent instructions_test2_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    PolygonComponent header_border4
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .44)
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent header_text4
      letterHeight = 0.05
      pos = (0, .44)
      startVal [time (s)] = 0.0
      text = Your Task
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    PolygonComponent continue_info4
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent continue_border4
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
      text = Please press the spacebar to begin with the 1st of 4 blocks of the test phase.
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    KeyboardComponent key_resp4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent info4
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = $'Please place your index fingers on the keys "A" ("' + smaller + '") and "L" ("' + larger + '").\nIt is important that you keep your index fingers on these keys throughout all rounds.'
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  Routine setup
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    UnknownComponent setup_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    CodeComponent code_6
      Code Type = JS
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      Before JS Experiment:
        var groups = ["control", "guess"]
        var group = "control";
        //console.log("group:", group)

        var safari = false;
        var opera = false;
        var browser_name;
        var browser_version;

        function isFullscreen(){
            var isInFullScreen = (document.fullscreenElement && document.fullscreenElement !== null) ||
                (document.webkitFullscreenElement && document.webkitFullscreenElement !== null) ||
                (document.mozFullScreenElement && document.mozFullScreenElement !== null) ||
                (document.msFullscreenElement && document.msFullscreenElement !== null);
                return isInFullScreen
        }

        function isBrowserUpToDate() {
          var userAgent = navigator.userAgent;

          // Check if the browser is Chrome
          if (/Chrome\/(\d+)/.test(userAgent)) {
            // Get the version number of Chrome
            var version = parseInt(RegExp.$1);
            browser_name = "Chrome";
            // Check if the version of Chrome is at least 109
            if (version >= 109) {
              return true;
            }
          }
          // Check if the browser is Firefox
          else if (/Firefox\/(\d+)/.test(userAgent)) {
            // Get the version number of Firefox
            var version = parseInt(RegExp.$1);
            browser_name = "Firefox";
            // Check if the version of Firefox is at least 102
            if (version >= 102) {
              return true;
            }
          }
          // Check if the browser is Safari
          else if (/^Mozilla\/5.0 \(.+?\) AppleWebKit\/(\d+)\./.test(userAgent)) {
            safari = true;
            // Get the version number of Safari
            var version = parseInt(RegExp.$1);
            browser_name = "Safari";
            // Check if the version of Safari is at least 16
            if (version >= 16) {
              return true;
            }
          }
          // Check if the browser is Edge
          else if (/Edg\/(\d+)/.test(userAgent)) {
            // Get the version number of Edge
            var version = parseInt(RegExp.$1);
            browser_name = "Edge";
            // Check if the version of Edge is at least 110
            if (version >= 110) {
              return true;
            }
          }

          // The browser is not up to date
          browser_version = version;
          return false;
        }
        var browser_check
        var userAgent
      Begin JS Experiment:
        //const sel_group = Math.floor(Math.random() * 2);
        //group = groups[sel_group]
        if (((expInfo["participant"] % 2) == 0)) {
            group = groups[1]; //guess
        } else {
            group = groups[0]; //control
        }
        console.log("group:", group)

        browser_check = isBrowserUpToDate();
        userAgent = navigator.userAgent;
        opera = (navigator.userAgent.match(/Opera|OPR\//) ? true : false);

        var screensize = [psychoJS.window.size[0], psychoJS.window.size[1]]
        console.log("screensize", screensize)
        psychoJS.experiment.addData("screensize", screensize);

        stim =
            [
          {
            "trial_type": ["practice", "practice", "practice", "practice", "practice", "practice", "practice", "practice"],
            "mean": [550, 550, 450, 550, 450, 450, 550, 450],
            "stim1": [628, 858, 691, 275, 334, 213, 735, 650],
            "stim2": [633, 347, 560, 627, 264, 282, 104, 494],
            "stim3": [318, 882, 346, 542, 532, 265, 539, 203],
            "stim4": [818, 546, 664, 805, 842, 255, 602, 658],
            "stim5": [715, 456, 107, 810, 350, 522, 358, 608],
            "stim6": [515, 105, 425, 897, 600, 823, 790, 181],
            "stim7": [204, 774, 537, 724, 816, 582, 882, 343],
            "stim8": [772, 813, 240, 113, 196, 781, 422, 823],
            "stim9": [141, 108, 330, 784, 204, 219, 402, 194],
            "stim10": [368, 819, 184, 562, 355, 234, 462, 276],
            "stim11": [580, 306, 653, 302, 882, 459, 846, 628],
            "stim12": [756, 695, 615, 716, 339, 339, 232, 708],
            "stim13": [656, 613, 461, 276, 199, 620, 492, 365],
            "stim14": [538, 287, 884, 699, 382, 860, 737, 134],
            "stim15": [458, 324, 385, 319, 245, 642, 554, 581],
            "stim16": [700, 867, 118, 349, 660, 104, 643, 354],
            "x_pos1": [-0.332, -0.184, -0.184, -0.111, 0.7, -0.553, 0.111, -0.184],
            "x_pos2": [-0.258, 0.258, 0.626, -0.553, 0.184, -0.332, -0.626, -0.553],
            "x_pos3": [0.184, 0.258, 0.553, -0.332, 0.553, -0.626, -0.184, 0.7],
            "x_pos4": [-0.037, -0.111, -0.479, -0.111, 0.184, 0.184, -0.111, 0.626],
            "x_pos5": [-0.332, -0.626, 0.7, -0.626, -0.037, 0.037, 0.184, 0.405],
            "x_pos6": [0.7, 0.037, 0.626, -0.553, 0.332, -0.184, -0.037, -0.111],
            "x_pos7": [-0.258, -0.405, -0.626, 0.332, 0.626, -0.258, -0.111, 0.111],
            "x_pos8": [0.332, -0.037, 0.037, 0.7, -0.258, -0.037, -0.479, 0.258],
            "x_pos9": [-0.7, -0.405, 0.553, 0.7, 0.037, -0.7, -0.332, 0.553],
            "x_pos10": [-0.553, 0.479, 0.405, -0.626, 0.258, 0.332, -0.332, -0.7],
            "x_pos11": [0.332, 0.7, -0.332, 0.037, 0.553, 0.626, 0.626, 0.405],
            "x_pos12": [-0.258, 0.626, 0.111, 0.626, -0.626, 0.479, -0.037, 0.037],
            "x_pos13": [0.332, 0.626, -0.553, -0.037, 0.332, 0.111, -0.111, 0.626],
            "x_pos14": [0.037, -0.626, 0.479, -0.7, 0.111, -0.332, -0.111, 0.405],
            "x_pos15": [-0.111, -0.258, -0.037, 0.184, 0.405, -0.111, -0.332, -0.479],
            "x_pos16": [0.626, -0.111, -0.332, 0.037, -0.111, -0.553, -0.184, -0.184],
            "y_pos1": [0.285, -0.21, 0.23, 0.065, -0.265, 0.175, 0.12, 0.285],
            "y_pos2": [0.34, -0.1, 0.175, 0.065, 0.23, 0.23, 0.34, 0.285],
            "y_pos3": [0.01, 0.12, 0.395, 0.285, -0.045, 0.395, -0.1, 0.395],
            "y_pos4": [-0.045, 0.065, 0.285, -0.155, 0.395, -0.1, 0.23, 0.175],
            "y_pos5": [-0.21, -0.045, 0.45, 0.45, 0.175, 0.395, -0.265, -0.265],
            "y_pos6": [0.12, 0.34, 0.065, -0.21, 0.395, -0.265, -0.045, 0.065],
            "y_pos7": [0.285, -0.21, 0.175, 0.395, 0.34, 0.34, -0.1, -0.045],
            "y_pos8": [-0.265, 0.12, -0.21, 0.175, 0.01, 0.285, 0.395, -0.045],
            "y_pos9": [0.285, 0.395, 0.285, 0.285, 0.34, 0.34, -0.1, 0.12],
            "y_pos10": [0.065, -0.21, -0.1, -0.155, -0.1, -0.1, 0.12, -0.045],
            "y_pos11": [0.23, 0.175, -0.155, 0.45, 0.23, -0.155, 0.34, -0.21],
            "y_pos12": [-0.265, -0.1, 0.12, 0.12, -0.21, -0.1, -0.265, -0.155],
            "y_pos13": [-0.045, 0.12, -0.265, 0.23, -0.1, -0.155, 0.34, -0.155],
            "y_pos14": [0.45, -0.265, 0.45, 0.395, 0.395, -0.045, 0.065, 0.45],
            "y_pos15": [0.34, -0.155, 0.23, 0.12, 0.285, -0.155, 0.45, 0.175],
            "y_pos16": [0.01, 0.01, 0.065, 0.065, 0.285, 0.01, -0.045, 0.12],
            "block": [0, 0, 0, 0, 0, 0, 0, 0]
          },
          {
            "trial_type": ["burn_in", "burn_in", "burn_in", "burn_in", "burn_in", "burn_in", "burn_in", "burn_in"],
            "mean": [550, 550, 450, 450, 550, 450, 550, 450],
            "stim1": [573, 182, 730, 695, 855, 661, 833, 193],
            "stim2": [378, 868, 349, 809, 799, 608, 403, 208],
            "stim3": [204, 811, 637, 272, 569, 876, 201, 408],
            "stim4": [601, 645, 206, 841, 432, 209, 714, 377],
            "stim5": [720, 123, 157, 665, 424, 110, 611, 205],
            "stim6": [890, 679, 407, 250, 336, 409, 839, 708],
            "stim7": [294, 505, 302, 176, 664, 315, 363, 680],
            "stim8": [439, 354, 803, 277, 360, 687, 722, 131],
            "stim9": [699, 604, 326, 300, 566, 519, 781, 265],
            "stim10": [896, 492, 716, 192, 275, 759, 244, 524],
            "stim11": [849, 616, 834, 588, 174, 186, 538, 875],
            "stim12": [201, 518, 364, 217, 438, 309, 450, 405],
            "stim13": [858, 731, 867, 392, 639, 393, 574, 770],
            "stim14": [172, 747, 159, 308, 833, 597, 402, 357],
            "stim15": [498, 809, 114, 834, 831, 216, 867, 893],
            "stim16": [528, 116, 229, 384, 605, 346, 258, 201],
            "x_pos1": [-0.7, 0.626, -0.479, -0.184, 0.626, 0.405, 0.184, 0.258],
            "x_pos2": [0.184, -0.7, 0.405, -0.479, -0.7, -0.184, 0.405, 0.405],
            "x_pos3": [0.037, -0.332, -0.111, -0.111, -0.037, 0.479, 0.184, -0.037],
            "x_pos4": [-0.037, 0.258, -0.626, 0.037, -0.626, 0.111, 0.332, -0.479],
            "x_pos5": [0.184, 0.553, 0.479, -0.405, 0.332, -0.7, 0.553, 0.626],
            "x_pos6": [0.037, -0.037, -0.479, -0.553, -0.184, 0.405, -0.405, -0.7],
            "x_pos7": [0.184, -0.479, 0.332, -0.258, -0.405, 0.111, -0.184, 0.7],
            "x_pos8": [0.405, -0.626, -0.332, 0.111, 0.479, 0.553, -0.111, -0.479],
            "x_pos9": [0.184, 0.332, -0.111, 0.111, 0.7, -0.553, -0.553, -0.184],
            "x_pos10": [0.405, -0.626, 0.184, 0.184, 0.7, 0.332, -0.184, 0.184],
            "x_pos11": [0.258, 0.184, -0.405, -0.184, 0.405, 0.626, 0.553, -0.405],
            "x_pos12": [-0.553, -0.553, 0.626, -0.184, -0.037, -0.626, -0.184, 0.332],
            "x_pos13": [-0.332, -0.332, 0.332, 0.037, 0.405, -0.184, -0.037, -0.626],
            "x_pos14": [0.258, 0.479, 0.184, -0.037, -0.626, -0.037, 0.332, 0.111],
            "x_pos15": [0.037, -0.037, 0.405, -0.111, 0.7, 0.111, -0.7, -0.258],
            "x_pos16": [0.626, -0.332, 0.111, 0.332, -0.626, -0.553, -0.479, 0.626],
            "y_pos1": [0.34, 0.285, 0.45, 0.01, 0.23, 0.065, 0.175, 0.285],
            "y_pos2": [-0.265, 0.175, -0.155, -0.1, 0.285, 0.45, -0.1, 0.285],
            "y_pos3": [0.34, 0.285, 0.285, 0.175, 0.285, -0.265, 0.285, -0.1],
            "y_pos4": [0.01, 0.34, 0.45, -0.1, 0.12, 0.23, -0.265, 0.23],
            "y_pos5": [0.01, 0.34, 0.01, 0.23, 0.175, 0.285, -0.155, 0.23],
            "y_pos6": [-0.045, -0.1, -0.1, 0.175, -0.1, 0.285, 0.45, 0.395],
            "y_pos7": [0.23, -0.1, 0.45, 0.45, 0.34, -0.265, -0.1, 0.175],
            "y_pos8": [-0.265, 0.395, 0.23, 0.45, -0.21, 0.34, -0.045, -0.1],
            "y_pos9": [0.285, -0.21, -0.21, 0.175, 0.175, 0.065, 0.12, 0.395],
            "y_pos10": [0.065, 0.12, 0.01, -0.155, 0.285, -0.1, 0.01, 0.065],
            "y_pos11": [0.45, 0.065, -0.21, -0.21, -0.21, -0.045, 0.285, 0.395],
            "y_pos12": [-0.265, 0.34, -0.155, 0.175, 0.01, 0.12, -0.265, -0.1],
            "y_pos13": [0.45, 0.065, -0.21, 0.01, 0.45, 0.285, 0.45, 0.45],
            "y_pos14": [-0.045, 0.01, -0.155, 0.45, -0.045, 0.395, 0.285, 0.01],
            "y_pos15": [0.065, 0.01, 0.01, 0.395, 0.01, 0.395, 0.45, 0.01],
            "y_pos16": [-0.045, -0.155, 0.01, 0.01, -0.1, -0.045, -0.045, -0.045],
            "block": [1, 1, 1, 1, 1, 1, 1, 1]
          },
          {
            "trial_type": ["warmup", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention"],
            "mean": [550, 450, 450, 450, 550, 550, 550, 550, 450, 550, 550, 450, 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200],
            "stim1": [703, 748, 260, 742, 728, 586, 664, 436, 355, 383, 197, 231, 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162],
            "stim2": [699, 347, 321, 506, 355, 364, 679, 388, 248, 782, 841, 724, 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108],
            "stim3": [104, 201, 709, 363, 103, 273, 492, 834, 416, 520, 618, 844, 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206],
            "stim4": [585, 568, 541, 721, 802, 225, 851, 520, 259, 153, 723, 398, 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287],
            "stim5": [422, 195, 294, 696, 578, 692, 337, 811, 255, 837, 434, 438, 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129],
            "stim6": [154, 676, 817, 319, 650, 813, 143, 140, 455, 641, 378, 691, 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252],
            "stim7": [117, 166, 141, 216, 794, 822, 548, 645, 391, 691, 191, 172, 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220],
            "stim8": [887, 419, 587, 191, 632, 320, 577, 562, 597, 665, 765, 442, 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247],
            "stim9": [714, 128, 886, 422, 513, 862, 786, 554, 467, 632, 574, 572, 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165],
            "stim10": [862, 439, 131, 483, 823, 478, 378, 525, 514, 490, 168, 124, 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170],
            "stim11": [408, 754, 269, 435, 168, 467, 641, 724, 596, 160, 897, 329, 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280],
            "stim12": [643, 477, 173, 452, 362, 529, 881, 496, 315, 306, 772, 368, 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154],
            "stim13": [800, 554, 374, 222, 846, 191, 275, 509, 791, 809, 827, 541, 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119],
            "stim14": [836, 711, 741, 283, 148, 724, 746, 762, 508, 671, 238, 523, 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218],
            "stim15": [742, 418, 465, 446, 780, 876, 141, 225, 611, 740, 876, 287, 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210],
            "stim16": [124, 399, 491, 703, 518, 578, 661, 669, 422, 320, 301, 516, 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273],
            "x_pos1": [-0.479, -0.553, -0.332, -0.184, 0.7, 0.405, 0.111, -0.184, -0.111, 0.037, -0.626, -0.037, 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-0.479],
            "x_pos2": [0.405, 0.553, -0.7, -0.553, -0.037, 0.332, -0.7, -0.553, 0.405, 0.479, -0.037, -0.553, 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0.553],
            "x_pos3": [-0.7, -0.258, -0.553, -0.626, -0.111, 0.037, -0.184, -0.7, 0.332, 0.7, -0.111, 0.626, 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-0.553],
            "x_pos4": [0.184, 0.626, 0.037, -0.184, 0.553, -0.258, -0.184, 0.037, 0.258, -0.111, 0.405, 0.184, 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0.332],
            "x_pos5": [0.111, -0.7, 0.405, 0.258, 0.553, 0.626, -0.184, 0.7, -0.332, 0.111, -0.037, 0.184, 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-0.111],
            "x_pos6": [-0.553, 0.184, -0.111, -0.553, -0.479, -0.553, -0.479, -0.037, 0.479, 0.479, 0.111, -0.7, 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-0.037],
            "x_pos7": [-0.7, 0.258, 0.184, 0.553, 0.111, -0.405, 0.111, 0.037, -0.258, 0.037, 0.332, -0.111, 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0.184],
            "x_pos8": [-0.626, 0.184, 0.7, 0.258, -0.184, -0.332, 0.184, 0.553, -0.553, 0.258, 0.7, 0.037, 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0.184],
            "x_pos9": [0.626, 0.626, -0.405, 0.405, -0.111, 0.405, -0.626, 0.626, 0.479, 0.332, -0.405, -0.258, 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-0.626],
            "x_pos10": [0.626, 0.037, 0.405, 0.184, -0.184, 0.405, 0.258, -0.405, 0.7, 0.037, 0.037, -0.405, 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0.7],
            "x_pos11": [0.111, 0.184, 0.553, -0.479, -0.7, -0.405, -0.479, -0.111, -0.7, -0.258, 0.332, 0.479, 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0.553],
            "x_pos12": [-0.184, 0.626, -0.184, -0.553, -0.111, 0.258, -0.479, -0.405, -0.111, 0.332, 0.553, -0.332, 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-0.258],
            "x_pos13": [0.258, -0.553, 0.258, 0.405, -0.258, -0.111, 0.626, 0.037, -0.184, 0.7, -0.7, 0.111, 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0.7],
            "x_pos14": [-0.258, 0.332, -0.553, 0.479, 0.037, -0.405, -0.184, 0.258, -0.258, -0.111, -0.184, 0.111, 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0.037],
            "x_pos15": [0.111, 0.111, 0.332, 0.258, 0.553, -0.037, 0.405, -0.479, 0.553, 0.626, 0.479, 0.332, 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-0.405],
            "x_pos16": [0.479, -0.479, 0.405, 0.184, 0.479, 0.626, -0.037, -0.332, 0.626, 0.184, 0.626, -0.7, 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0.626],
            "y_pos1": [-0.155, 0.45, 0.285, 0.175, 0.23, -0.155, 0.175, 0.175, 0.34, 0.065, 0.34, 0.065, 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0.12],
            "y_pos2": [0.285, -0.155, 0.065, 0.175, -0.045, -0.265, 0.23, 0.34, 0.175, -0.21, 0.065, -0.21, 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0.01],
            "y_pos3": [-0.1, 0.065, 0.45, 0.065, 0.065, 0.23, -0.21, -0.21, -0.1, 0.23, 0.395, 0.175, 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-0.045],
            "y_pos4": [0.285, 0.12, 0.395, 0.34, 0.395, -0.1, 0.23, 0.34, 0.065, 0.285, 0.45, -0.21, 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0.285],
            "y_pos5": [0.01, -0.155, 0.34, 0.23, 0.285, 0.065, 0.45, -0.045, 0.12, 0.285, 0.285, 0.23, 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0.395],
            "y_pos6": [0.12, 0.065, 0.175, 0.285, -0.265, 0.34, -0.045, 0.34, 0.285, 0.065, 0.395, -0.1, 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-0.21],
            "y_pos7": [-0.21, 0.34, 0.175, 0.34, 0.01, 0.34, 0.395, 0.065, -0.21, -0.265, -0.265, 0.23, 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-0.21],
            "y_pos8": [-0.045, 0.34, -0.155, 0.45, 0.45, 0.285, 0.01, -0.1, 0.065, 0.285, -0.045, 0.395, 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0.395],
            "y_pos9": [-0.265, 0.175, -0.1, 0.12, -0.21, 0.12, 0.34, 0.23, 0.065, 0.01, 0.45, -0.1, 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-0.155],
            "y_pos10": [0.065, -0.045, -0.155, -0.155, 0.23, -0.21, 0.395, 0.285, 0.065, -0.21, -0.155, -0.265, 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0.395],
            "y_pos11": [-0.265, -0.265, 0.45, 0.12, 0.23, -0.155, 0.175, 0.395, 0.395, -0.21, 0.23, 0.34, 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0.12],
            "y_pos12": [0.175, 0.23, 0.34, 0.395, -0.265, 0.065, 0.285, 0.12, -0.045, 0.34, -0.1, 0.285, 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0.285],
            "y_pos13": [0.01, -0.21, 0.175, 0.45, -0.045, 0.45, 0.45, 0.175, 0.01, 0.175, 0.12, 0.285, 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-0.045],
            "y_pos14": [0.395, -0.21, -0.1, -0.1, 0.34, -0.21, 0.34, 0.12, -0.265, -0.045, 0.23, -0.1, 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0.175],
            "y_pos15": [0.395, -0.155, 0.01, 0.395, -0.265, 0.12, 0.395, 0.34, 0.34, -0.155, 0.12, 0.01, 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0.285],
            "y_pos16": [-0.045, 0.45, 0.395, -0.1, 0.23, -0.155, -0.1, 0.01, -0.265, 0.45, -0.21, 0.34, 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0.065],
            "block": [2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 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2]
          },
          {
            "trial_type": ["warmup", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test"],
            "mean": [450, 550, 450, 550, 550, 450, 550, 450, 800, 550, 550, 450, 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550],
            "stim1": [767, 409, 760, 643, 219, 107, 288, 320, 751, 591, 595, 517, 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693],
            "stim2": [264, 425, 126, 486, 843, 820, 544, 531, 877, 347, 257, 238, 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644],
            "stim3": [116, 757, 512, 684, 163, 781, 669, 355, 743, 693, 384, 671, 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820],
            "stim4": [483, 700, 497, 702, 809, 178, 738, 117, 895, 574, 521, 524, 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130],
            "stim5": [524, 585, 550, 448, 310, 134, 265, 325, 789, 724, 887, 130, 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645],
            "stim6": [300, 453, 553, 802, 839, 452, 723, 855, 765, 875, 589, 519, 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321],
            "stim7": [352, 642, 124, 658, 173, 629, 442, 636, 762, 137, 506, 852, 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717],
            "stim8": [598, 695, 753, 212, 869, 534, 837, 348, 803, 329, 416, 305, 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844],
            "stim9": [865, 715, 322, 678, 731, 668, 703, 314, 880, 393, 773, 377, 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106],
            "stim10": [334, 792, 538, 775, 806, 351, 767, 265, 716, 849, 824, 824, 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452],
            "stim11": [686, 162, 491, 316, 328, 480, 450, 280, 728, 199, 207, 275, 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120],
            "stim12": [344, 119, 300, 704, 697, 699, 480, 516, 888, 594, 792, 203, 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827],
            "stim13": [218, 752, 541, 519, 199, 245, 448, 828, 800, 819, 570, 452, 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597],
            "stim14": [123, 618, 480, 149, 555, 282, 591, 506, 718, 799, 748, 363, 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888],
            "stim15": [765, 718, 253, 725, 859, 427, 744, 816, 875, 209, 232, 471, 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367],
            "stim16": [461, 258, 400, 299, 400, 413, 111, 188, 810, 668, 499, 479, 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629],
            "x_pos1": [0.7, 0.553, -0.479, -0.626, 0.332, 0.479, -0.626, -0.258, -0.184, 0.037, 0.626, -0.405, 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-0.258],
            "x_pos2": [-0.405, -0.7, -0.258, 0.258, 0.479, -0.258, -0.405, 0.479, -0.553, -0.332, 0.184, -0.626, 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0.479],
            "x_pos3": [0.184, -0.037, 0.405, -0.7, -0.7, 0.111, 0.111, 0.332, 0.332, 0.184, -0.7, -0.037, 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0.037],
            "x_pos4": [-0.553, -0.258, 0.626, 0.184, -0.553, -0.405, 0.184, -0.332, -0.479, -0.111, 0.332, 0.7, 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0.553],
            "x_pos5": [0.332, -0.479, 0.258, 0.553, 0.111, 0.111, -0.332, 0.479, -0.184, 0.7, 0.111, 0.184, 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0.479],
            "x_pos6": [-0.037, -0.405, -0.037, 0.111, -0.111, 0.258, -0.7, 0.258, -0.7, 0.479, 0.037, -0.258, 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-0.479],
            "x_pos7": [-0.479, 0.111, 0.479, -0.479, 0.626, 0.405, -0.7, 0.626, -0.405, 0.7, -0.332, 0.7, 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0.037],
            "x_pos8": [0.405, -0.7, 0.184, -0.037, 0.037, -0.258, 0.037, 0.037, 0.332, -0.184, -0.626, 0.258, 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-0.405],
            "x_pos9": [-0.332, -0.111, -0.405, -0.553, -0.405, -0.037, 0.258, -0.332, -0.332, 0.037, 0.553, -0.626, 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-0.037],
            "x_pos10": [-0.332, -0.111, 0.7, -0.184, -0.111, 0.111, -0.479, 0.626, -0.479, -0.111, 0.332, -0.553, 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0.553],
            "x_pos11": [-0.553, -0.479, -0.626, 0.258, 0.626, 0.479, 0.332, -0.626, 0.332, -0.405, 0.037, 0.553, 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0.405],
            "x_pos12": [-0.7, 0.7, 0.553, -0.479, 0.258, -0.479, 0.626, 0.553, 0.479, 0.037, 0.258, -0.111, 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-0.479],
            "x_pos13": [0.258, 0.258, 0.332, 0.037, 0.184, 0.479, 0.332, 0.258, -0.184, -0.7, -0.553, 0.037, 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0.405],
            "x_pos14": [-0.037, 0.479, -0.479, -0.626, 0.258, 0.479, -0.111, 0.037, 0.626, 0.553, -0.111, -0.111, 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-0.553],
            "x_pos15": [0.479, -0.037, 0.037, 0.553, -0.7, 0.184, -0.184, -0.626, 0.405, -0.258, -0.553, 0.184, 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0.332],
            "x_pos16": [-0.258, 0.184, 0.553, 0.037, -0.479, 0.405, 0.332, -0.7, -0.626, -0.626, -0.184, -0.037, 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0.332],
            "y_pos1": [0.065, 0.175, -0.155, 0.285, 0.45, 0.12, -0.045, 0.23, 0.12, -0.155, 0.45, -0.265, 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-0.155],
            "y_pos2": [-0.045, 0.065, -0.1, 0.395, 0.395, 0.175, -0.265, -0.045, -0.21, 0.01, 0.175, 0.45, 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0.34],
            "y_pos3": [0.01, 0.34, -0.155, -0.21, -0.155, 0.395, 0.395, -0.265, 0.12, -0.1, 0.395, 0.175, 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0.12],
            "y_pos4": [0.12, -0.265, 0.01, 0.01, -0.045, 0.065, -0.155, 0.065, -0.1, -0.045, -0.155, -0.1, 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-0.045],
            "y_pos5": [0.285, 0.12, 0.34, 0.12, 0.01, 0.175, -0.045, 0.285, 0.285, 0.23, 0.45, 0.175, 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0.23],
            "y_pos6": [-0.1, 0.45, -0.1, 0.45, 0.175, 0.01, 0.065, -0.265, 0.395, 0.175, 0.175, 0.175, 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-0.21],
            "y_pos7": [0.34, 0.12, 0.12, 0.175, 0.45, 0.01, 0.23, 0.23, -0.045, -0.21, 0.065, -0.21, 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-0.265],
            "y_pos8": [-0.265, 0.01, -0.045, 0.065, -0.045, -0.1, -0.155, 0.34, 0.23, 0.34, 0.45, -0.155, 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0.34],
            "y_pos9": [-0.045, 0.01, 0.065, -0.1, 0.175, -0.1, -0.1, 0.175, -0.265, 0.23, 0.23, -0.1, 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-0.1],
            "y_pos10": [0.23, 0.175, 0.065, -0.265, 0.23, -0.045, 0.065, 0.01, -0.045, -0.155, -0.045, 0.175, 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0.175],
            "y_pos11": [0.34, 0.34, -0.155, 0.175, 0.395, 0.23, -0.1, -0.265, 0.175, 0.12, 0.23, 0.45, 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0.34],
            "y_pos12": [-0.265, -0.21, 0.395, -0.1, -0.265, 0.175, 0.12, -0.265, -0.155, 0.34, 0.01, 0.065, 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0.395],
            "y_pos13": [-0.045, 0.175, -0.045, -0.155, 0.45, -0.21, 0.45, 0.45, -0.045, -0.045, 0.34, -0.155, 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0.175],
            "y_pos14": [0.23, 0.175, 0.12, -0.265, 0.01, -0.045, -0.1, 0.395, -0.21, 0.395, 0.12, 0.12, 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-0.155],
            "y_pos15": [0.065, 0.065, 0.175, -0.265, 0.45, -0.045, 0.34, 0.45, 0.065, 0.175, 0.12, 0.395, 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-0.265],
            "y_pos16": [0.34, -0.155, 0.01, -0.21, 0.395, 0.175, 0.395, -0.1, 0.34, 0.285, -0.265, 0.01, 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-0.155],
            "block": [3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 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3]
          },
          {
            "trial_type": ["warmup", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test"],
            "mean": [450, 450, 550, 200, 450, 550, 450, 550, 450, 550, 550, 550, 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450],
            "stim1": [598, 489, 553, 231, 817, 797, 262, 307, 573, 881, 870, 541, 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523],
            "stim2": [633, 677, 261, 226, 241, 158, 504, 548, 295, 801, 894, 626, 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132],
            "stim3": [814, 336, 105, 135, 702, 269, 126, 840, 164, 835, 660, 337, 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809],
            "stim4": [360, 251, 657, 271, 448, 713, 885, 625, 308, 580, 786, 230, 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179],
            "stim5": [178, 250, 601, 137, 138, 487, 630, 319, 839, 645, 714, 571, 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865],
            "stim6": [154, 266, 164, 216, 822, 829, 476, 276, 525, 582, 706, 589, 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200],
            "stim7": [487, 413, 832, 160, 441, 758, 868, 855, 462, 568, 211, 702, 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133],
            "stim8": [400, 590, 870, 269, 301, 429, 606, 726, 319, 431, 465, 100, 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121],
            "stim9": [191, 583, 837, 112, 321, 538, 152, 182, 824, 482, 621, 721, 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574],
            "stim10": [372, 722, 250, 150, 686, 166, 140, 117, 631, 729, 575, 842, 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312],
            "stim11": [459, 270, 858, 229, 359, 579, 278, 692, 337, 373, 577, 813, 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310],
            "stim12": [667, 164, 690, 130, 142, 819, 204, 296, 540, 462, 534, 690, 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410],
            "stim13": [570, 416, 697, 286, 102, 769, 865, 825, 633, 269, 320, 204, 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887],
            "stim14": [131, 457, 135, 288, 548, 358, 305, 864, 193, 554, 257, 680, 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802],
            "stim15": [856, 468, 882, 209, 496, 407, 275, 658, 280, 127, 449, 534, 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239],
            "stim16": [330, 848, 408, 151, 636, 724, 624, 670, 277, 481, 161, 620, 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704],
            "x_pos1": [0.258, 0.111, -0.037, -0.405, -0.479, 0.184, 0.626, 0.332, 0.7, -0.626, -0.626, 0.626, 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-0.626],
            "x_pos2": [0.626, -0.258, 0.479, -0.405, 0.037, -0.405, 0.111, 0.553, 0.037, 0.332, 0.405, -0.7, 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0.111],
            "x_pos3": [0.332, 0.405, -0.7, -0.184, 0.184, -0.111, 0.479, 0.037, -0.037, 0.405, 0.037, 0.184, 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-0.111],
            "x_pos4": [0.7, -0.7, 0.332, -0.479, 0.258, 0.553, -0.553, 0.553, 0.626, -0.553, 0.184, 0.037, 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-0.479],
            "x_pos5": [0.626, 0.258, -0.111, 0.553, -0.7, -0.111, 0.7, -0.111, -0.184, -0.037, 0.111, -0.553, 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-0.479],
            "x_pos6": [0.111, 0.184, -0.553, 0.037, -0.405, 0.037, 0.258, 0.553, 0.405, 0.553, 0.553, 0.553, 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-0.553],
            "x_pos7": [-0.553, 0.258, -0.037, 0.479, -0.258, 0.479, 0.258, -0.332, -0.332, -0.332, 0.111, -0.184, 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-0.184],
            "x_pos8": [-0.184, 0.479, 0.037, -0.111, 0.626, -0.479, -0.405, 0.258, 0.405, -0.553, 0.405, -0.7, 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0.479],
            "x_pos9": [-0.258, -0.111, 0.111, -0.037, 0.037, -0.626, 0.332, -0.111, 0.7, 0.258, 0.258, -0.553, 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0.405],
            "x_pos10": [-0.626, -0.037, -0.7, 0.405, 0.037, 0.553, -0.184, 0.111, -0.405, 0.184, 0.626, -0.111, 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0.479],
            "x_pos11": [-0.037, 0.111, 0.184, -0.7, 0.479, 0.258, 0.332, 0.553, -0.184, -0.405, 0.405, 0.479, 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0.184],
            "x_pos12": [-0.111, -0.7, -0.184, 0.184, -0.037, -0.553, 0.184, 0.111, 0.258, 0.7, -0.553, 0.111, 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0.479],
            "x_pos13": [-0.7, 0.626, 0.258, -0.258, -0.258, 0.111, -0.332, 0.7, -0.184, 0.111, -0.111, -0.479, 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0.626],
            "x_pos14": [-0.111, 0.553, 0.111, -0.479, 0.405, -0.111, 0.111, -0.553, -0.7, -0.332, 0.553, 0.553, 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-0.553],
            "x_pos15": [0.553, -0.553, 0.111, 0.258, 0.479, 0.405, -0.553, -0.037, -0.405, -0.332, -0.405, -0.332, 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-0.479],
            "x_pos16": [-0.553, 0.332, 0.7, -0.626, 0.405, -0.037, 0.405, 0.184, 0.7, -0.7, -0.479, 0.111, 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-0.258],
            "y_pos1": [0.34, 0.34, -0.045, 0.45, 0.285, 0.285, 0.285, 0.34, -0.1, 0.23, 0.34, 0.395, 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0.065],
            "y_pos2": [-0.045, -0.155, 0.065, 0.12, 0.285, 0.065, -0.265, 0.23, 0.12, 0.45, 0.01, 0.285, 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-0.21],
            "y_pos3": [-0.155, -0.155, 0.12, 0.23, -0.21, 0.175, 0.065, -0.265, 0.285, -0.21, 0.12, 0.065, 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-0.21],
            "y_pos4": [0.34, 0.34, -0.155, -0.045, -0.265, -0.265, -0.265, -0.21, -0.155, -0.265, 0.34, -0.045, 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-0.265],
            "y_pos5": [0.395, -0.1, -0.21, -0.045, -0.045, -0.265, 0.34, -0.1, 0.395, 0.065, 0.065, 0.45, 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0.45],
            "y_pos6": [0.175, 0.395, 0.065, 0.12, 0.12, 0.23, 0.12, 0.12, 0.285, 0.12, -0.155, -0.045, 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0.065],
            "y_pos7": [-0.1, 0.065, 0.175, 0.01, 0.175, 0.12, -0.045, 0.23, -0.045, -0.21, 0.34, 0.12, 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-0.1],
            "y_pos8": [-0.1, 0.34, 0.34, -0.045, 0.395, 0.065, 0.285, -0.265, 0.23, 0.065, -0.045, 0.34, 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0.395],
            "y_pos9": [-0.1, 0.065, -0.045, 0.285, 0.23, -0.21, 0.065, 0.23, -0.045, 0.175, -0.21, 0.01, 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-0.21],
            "y_pos10": [0.12, 0.175, -0.155, -0.265, -0.045, 0.285, -0.1, -0.155, 0.34, -0.155, -0.265, 0.23, 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-0.045],
            "y_pos11": [-0.1, 0.45, 0.23, 0.01, -0.1, 0.34, 0.01, 0.395, -0.21, 0.12, 0.34, 0.065, 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0.45],
            "y_pos12": [0.395, 0.45, 0.23, -0.155, 0.34, 0.01, 0.23, 0.285, -0.155, 0.45, 0.285, -0.155, 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0.065],
            "y_pos13": [0.065, 0.12, 0.01, -0.155, 0.065, -0.1, -0.1, -0.045, 0.285, -0.045, 0.175, -0.265, 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-0.155],
            "y_pos14": [0.01, 0.34, -0.1, -0.155, 0.395, 0.34, -0.1, -0.155, -0.21, 0.01, 0.395, -0.1, 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-0.21],
            "y_pos15": [-0.1, -0.045, 0.23, 0.12, 0.34, 0.01, 0.065, 0.45, 0.395, 0.12, 0.23, -0.21, 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-0.1],
            "y_pos16": [-0.21, -0.1, -0.155, -0.1, 0.065, 0.01, -0.155, 0.065, 0.23, -0.1, -0.21, 0.01, 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0.01],
            "block": [4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 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4]
          },
          {
            "trial_type": ["warmup", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test"],
            "mean": [550, 450, 450, 450, 450, 450, 550, 450, 550, 550, 550, 550, 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550],
            "stim1": [725, 232, 152, 286, 404, 460, 471, 785, 538, 624, 810, 559, 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694],
            "stim2": [517, 768, 569, 789, 579, 178, 835, 304, 773, 436, 828, 330, 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193],
            "stim3": [573, 162, 878, 440, 818, 474, 198, 637, 597, 454, 812, 648, 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712],
            "stim4": [718, 353, 124, 606, 651, 747, 701, 111, 391, 108, 314, 421, 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571],
            "stim5": [675, 590, 489, 207, 110, 344, 784, 104, 104, 492, 796, 655, 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539],
            "stim6": [640, 467, 620, 653, 219, 861, 675, 742, 682, 179, 140, 165, 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808],
            "stim7": [231, 548, 142, 410, 139, 450, 736, 713, 544, 754, 131, 753, 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708],
            "stim8": [482, 169, 412, 305, 685, 264, 506, 326, 312, 893, 755, 412, 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882],
            "stim9": [199, 874, 855, 359, 394, 272, 746, 265, 712, 503, 331, 119, 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167],
            "stim10": [701, 520, 486, 380, 133, 313, 652, 233, 873, 645, 477, 609, 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880],
            "stim11": [728, 173, 224, 521, 439, 349, 356, 784, 670, 802, 665, 723, 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516],
            "stim12": [751, 211, 666, 795, 835, 189, 278, 245, 441, 383, 442, 758, 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769],
            "stim13": [605, 202, 599, 431, 102, 581, 582, 554, 615, 749, 308, 528, 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558],
            "stim14": [414, 818, 609, 341, 607, 456, 303, 448, 220, 524, 691, 855, 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214],
            "stim15": [478, 624, 190, 227, 602, 896, 671, 753, 637, 610, 708, 445, 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226],
            "stim16": [363, 489, 185, 450, 483, 366, 306, 196, 691, 644, 592, 820, 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363],
            "x_pos1": [0.7, -0.184, 0.479, 0.111, 0.332, -0.405, 0.184, -0.111, 0.479, 0.111, 0.553, -0.037, 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-0.553],
            "x_pos2": [-0.037, 0.332, 0.626, 0.037, 0.258, 0.479, -0.037, 0.479, -0.626, 0.332, 0.184, 0.479, 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0.184],
            "x_pos3": [0.184, 0.626, 0.332, -0.553, 0.037, -0.037, -0.332, -0.553, -0.626, -0.037, -0.184, -0.037, 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-0.553],
            "x_pos4": [0.332, 0.405, -0.626, -0.7, -0.037, 0.332, 0.332, -0.479, 0.553, -0.405, -0.405, 0.111, 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0.332],
            "x_pos5": [0.405, 0.479, -0.184, 0.479, 0.332, 0.7, 0.332, 0.626, 0.553, -0.258, 0.405, 0.7, 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0.479],
            "x_pos6": [0.553, -0.626, -0.111, -0.258, -0.626, -0.258, -0.111, 0.7, -0.037, 0.184, 0.479, -0.405, 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0.626],
            "x_pos7": [-0.037, 0.332, -0.479, -0.626, -0.111, 0.405, -0.258, -0.111, 0.258, 0.7, -0.037, 0.258, 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-0.7],
            "x_pos8": [-0.626, 0.258, -0.553, 0.7, 0.405, -0.7, 0.7, 0.479, 0.258, -0.479, -0.332, -0.111, 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0.037],
            "x_pos9": [-0.037, -0.626, 0.479, -0.479, 0.553, -0.332, -0.258, -0.479, -0.405, 0.7, -0.184, 0.258, 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0.184],
            "x_pos10": [-0.037, 0.332, -0.553, -0.479, -0.111, -0.184, 0.7, -0.111, -0.405, 0.111, -0.037, -0.184, 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0.258],
            "x_pos11": [0.111, -0.479, -0.037, -0.405, 0.332, 0.626, -0.332, 0.7, -0.479, 0.7, -0.332, 0.626, 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-0.111],
            "x_pos12": [-0.184, 0.7, -0.332, -0.184, 0.405, -0.184, -0.479, -0.258, 0.553, 0.553, 0.7, 0.332, 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0.7],
            "x_pos13": [0.405, 0.184, 0.626, 0.037, 0.405, 0.626, 0.626, -0.405, -0.405, -0.7, -0.553, 0.258, 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-0.405],
            "x_pos14": [-0.479, -0.184, 0.479, -0.332, -0.479, 0.184, -0.626, -0.7, 0.037, 0.626, 0.184, -0.258, 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-0.7],
            "x_pos15": [0.332, -0.258, 0.037, 0.184, 0.626, 0.184, 0.258, -0.037, -0.037, 0.184, 0.479, -0.111, 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-0.405],
            "x_pos16": [-0.184, -0.553, 0.037, 0.626, -0.258, -0.332, 0.553, 0.332, 0.258, 0.626, 0.258, 0.332, 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0.258],
            "y_pos1": [-0.1, 0.285, 0.12, 0.23, -0.045, 0.01, -0.1, -0.21, 0.175, -0.1, 0.01, 0.12, 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0.34],
            "y_pos2": [0.12, 0.01, 0.23, 0.12, 0.01, -0.1, 0.065, -0.21, -0.1, 0.23, -0.045, 0.395, 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-0.1],
            "y_pos3": [0.175, 0.065, 0.395, 0.175, -0.045, 0.175, 0.34, 0.12, 0.285, 0.175, -0.1, -0.155, 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0.23],
            "y_pos4": [0.01, -0.045, 0.175, 0.34, 0.175, -0.155, 0.175, 0.45, 0.34, -0.21, 0.01, 0.01, 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-0.045],
            "y_pos5": [0.285, -0.265, 0.12, 0.23, 0.175, -0.265, -0.265, 0.395, -0.155, 0.23, 0.285, -0.1, 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0.01],
            "y_pos6": [0.285, 0.12, 0.065, 0.23, 0.285, 0.12, -0.155, -0.045, 0.23, 0.23, 0.34, -0.155, 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0.175],
            "y_pos7": [-0.155, 0.12, 0.285, -0.045, 0.23, 0.34, -0.045, -0.265, 0.285, 0.12, 0.395, 0.175, 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0.23],
            "y_pos8": [0.34, -0.045, 0.12, 0.395, -0.045, 0.065, -0.265, 0.45, 0.34, 0.12, 0.175, -0.1, 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-0.045],
            "y_pos9": [-0.265, 0.285, 0.45, 0.175, 0.175, -0.265, 0.395, 0.395, 0.23, -0.21, 0.01, 0.23, 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0.285],
            "y_pos10": [-0.21, -0.21, 0.285, 0.065, 0.285, 0.175, -0.045, 0.395, -0.1, 0.45, 0.285, 0.45, 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0.175],
            "y_pos11": [-0.155, 0.23, -0.1, 0.34, 0.12, 0.23, -0.265, 0.12, -0.21, 0.01, 0.12, 0.285, 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0.175],
            "y_pos12": [0.065, 0.395, -0.1, 0.285, 0.12, 0.12, 0.285, 0.285, 0.45, 0.23, 0.065, 0.45, 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-0.1],
            "y_pos13": [-0.1, -0.21, -0.21, -0.265, -0.265, -0.21, -0.21, -0.21, -0.155, 0.175, 0.395, -0.265, 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0.12],
            "y_pos14": [0.285, 0.01, 0.01, 0.34, 0.23, -0.045, 0.065, -0.1, -0.21, 0.395, -0.1, 0.175, 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0.12],
            "y_pos15": [-0.265, 0.285, 0.065, 0.395, -0.045, -0.265, -0.155, 0.12, 0.34, 0.34, -0.1, -0.045, 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0.01],
            "y_pos16": [0.45, 0.45, -0.21, 0.01, -0.265, 0.285, 0.12, 0.34, 0.395, 0.065, 0.01, -0.21, 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-0.045],
            "block": [5, 5, 5, 5, 5, 5, 5, 5, 5, 5, 5, 5, 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5]
          }
        ]
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
  Routine interim_prequ
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    UnknownComponent interim_prequ_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    PolygonComponent header_border_prequ
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .44)
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent header_text_prequ
      letterHeight = 0.05
      pos = (0, .44)
      startVal [time (s)] = 0.0
      text [set every repeat] = Your Task
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    TextComponent text_prequ
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $interim_prequ + "\n\n"+ "Please answer the following questions honestly, regardless of whether you were able to follow the given instructions.\nYour answers will not impact your approval rate on Prolific, nor will they result in exclusion from the study.\n\nRespond by clicking the mouse on the respective part of the slider."
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    PolygonComponent continue_prequ
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent continue_border_prequ
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
      text [set every repeat] = Please press the spacebar to continue.
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    KeyboardComponent key_resp_prequ
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_prequ
      Code Type = JS
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      Before JS Experiment:
        var t_place_fingers = 99999;
      Begin JS Experiment:
        qu_i = 1;
        qu_text = 'did you take a random guess (i.e.,\u00A0you had not the slightest clue what the correct answer might be and gave up by randomly responding with either "<\u00A0500" or ">\u00A0500")?'
      Begin JS Routine:
        qu_i = 1;
        qu_text = "did you take an educated guess (i.e.,\u00A0you chose the answer that seemed most probable at first glance, even without complete certainty of its correctness)?"

        if (block_i == 5) {
            t_place_fingers = 0;
        } else {
            t_place_fingers = 99999;
        }
  Routine interim_qu
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    UnknownComponent interim_qu_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    PolygonComponent header_border_qu
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .44)
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent header_text_qu
      letterHeight = 0.05
      pos = (0, .44)
      startVal [time (s)] = 0.0
      text [set every repeat] = Your Task
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    TextComponent text_qu
      letterHeight = 0.03
      pos = (0, .125)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"During the test phase, how often " + qu_text
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    PolygonComponent continue_qu
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent continue_border_qu
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
      text [set every repeat] = Please press the spacebar to continue.
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    KeyboardComponent key_resp_qu
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider.getRating()
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    SliderComponent slider
      fillColor = 0.0902, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      labels = "0\nnever", "1", "2", "3", "4", "5", "6", "7", "8", "9", "10\nvery often"
      letterHeight = 0.0225
      pos = (0, -0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11)
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    CodeComponent code_qu
      Code Type = JS
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      End JS Routine:
        //psychoJS.experiment.addData('qu_nr', qu_i);
        psychoJS.experiment.addData('qu_text', qu_text);

        qu_i += 1

        if (qu_i == 2) {
            qu_text = 'did you take a random guess (i.e.,\u00A0you had not the slightest clue what the correct answer might be and gave up by randomly responding with either "<\u00A0500" or ">\u00A0500")?'
        }
  Routine interim_postqu
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    UnknownComponent interim_postqu_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    CodeComponent code_2
      Code Type = JS
      Begin JS Routine:
        if(block_i == 5) {
            continueRoutine = false;
        }
    PolygonComponent header_border_postqu
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .44)
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent header_text_postqu
      letterHeight = 0.05
      pos = (0, .44)
      startVal [time (s)] = 0.0
      text [set every repeat] = $interim_header_postqu
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    TextComponent text_postqu
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $interim_prequ + '\n\n' + interim_postqu
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    PolygonComponent continue_postqu
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent continue_border_postqu
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
      text [set every repeat] = $interim_footer_postqu
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    KeyboardComponent key_resp_postqu
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine place_fingers
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    UnknownComponent place_fingers_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    CodeComponent code_4
      Code Type = JS
      Begin JS Routine:
        if(block_i == 5) {
            continueRoutine = false;
        }

        if (block_i == 2) {
            block_nr = "2nd"
        } else if (block_i == 3){
            block_nr = "3rd"
        } else {
            block_nr = "last"
        }
    PolygonComponent header_border12
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .44)
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_place_fingers
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    TextComponent header_text12
      letterHeight = 0.05
      pos = (0, .44)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_place_fingers
      text = Let’s continue!
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    TextComponent info12
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_place_fingers
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      text [set every repeat]:
        $'Please place your index fingers on the keys "A" ("' + smaller + '") and "L" ("' + larger + '").\nIt is important that you keep your index fingers on these keys throughout all rounds.\n\n' + instruction
    PolygonComponent continue_info12
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_place_fingers
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    TextComponent continue_border12
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $t_place_fingers
      text [set every repeat] = $'Please press the spacebar to continue with the ' + block_nr + ' of 4 blocks of the test phase.'
      wrapWidth = 3
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    KeyboardComponent key_resp12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_place_fingers
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  Routine browser_out
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    UnknownComponent browser_out_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    CodeComponent code_out
      Code Type = JS
      Before JS Experiment:
        var text_out = ""
        var text_out_time = 0
      Begin JS Routine:
        if(browser_check && !safari && !opera){
            psychoJS.experiment.addData('browser', userAgent);
            psychoJS.experiment.addData('browser_version', browser_version);
            psychoJS.experiment.addData('browser_name', browser_name);
        }
        if(!browser_check) {
            text_out = 'Unfortunately, your browser (' + userAgent + ') is out-of-date.' + '\n\n' +
            'Please update your browser or open a different, more up-to-date browser.' +
            '\n\n' + 'To return to the study, please use the following link' + '\n' +
            '(tip: Note down the link now):' + '\n' +
            'https://run.pavlovia.org/psychmeth-uni-kiel/lfm-rep?pp=' + expInfo["pp"] + '&session=test'
            text_out_time = 999999
        }

        if(safari || opera) {
            text_out = 'Participation in this study requires using Mozilla Firefox, Microsoft Edge, or Google Chrome.' +
            '\n\n' + 'To participate, please open one of the those browsers.' +
            '\n\n' + 'Then, use the following link.' + '\n' +
            '(tip: Note down the link now):' + '\n' +
            'https://run.pavlovia.org/psychmeth-uni-kiel/lfm-rep?pp=' + expInfo["pp"] + '&session=test'
            text_out_time = 999999
        }
      End JS Routine:
        if(!browser_check || safari || opera) {
            quitPsychoJS()
        }
    TextComponent out
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $text_out_time
      text [set every repeat] = $text_out
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    PolygonComponent continue_info_out
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $text_out_time
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    TextComponent continue_border_out
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $text_out_time
      text = Um die Studie in diesem Fenster zu schließen, drücken Sie bitte zwei Mal die Escape-Taste.
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  Routine premature_end
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    UnknownComponent premature_end_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    PolygonComponent header_border_end
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .44)
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $text_end_time
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    TextComponent header_text_end
      letterHeight = 0.05
      pos = (0, .44)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $text_end_time
      text = Thank you for you time!
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    CodeComponent code_end
      Code Type = JS
      Before JS Experiment:
        var text_end = 'Thank you for your time.'
        var text_end_time = 0
      Begin JS Routine:
        if(isFullscreen() != 1){
            text_end += '\n\n' +
            'It has been detected that you exited fullscreen mode. Therefore, unfortunately, it is not possible to continue the study.'
            text_end_time = 999999
        }
        /*
        if(condition_met_acc==0 && block_i==2) {
            text_end += '\n\n' +
            'Es liegen Anzeichen vor, dass Sie die Aufgabe nicht ernsthaft bearbeiten. Deshalb ist eine Fortsetzung der Studie leider nicht möglich.'
            text_end_time = 999999
        }
        */
      End JS Routine:
        if(text_end_time>0) {
            quitPsychoJS()
        }
    TextComponent end_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $text_end_time
      text [set every repeat] = $text_end
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    PolygonComponent continue_info_end
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $text_end_time
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    TextComponent continue_border_end
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $text_end_time
      text = You can now close the browser window.
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
  Routine save_dates
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    UnknownComponent save_dates_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    CodeComponent code_save_dates
      Code Type = JS
      Begin JS Experiment:
        da = new Date();
        date_start = da.getFullYear() +"-"+ (da.getMonth()+1) +"-"+ da.getDate() +" "+ da.getHours() +":"+ da.getMinutes() +":"+ da.getSeconds();
        psychoJS.experiment.addData("date_start", date_start);
      Begin JS Routine:
        dat = new Date();
        date_within = dat.getFullYear() +"-"+ (dat.getMonth()+1) +"-"+ dat.getDate() +" "+ dat.getHours() +":"+ dat.getMinutes() +":"+ dat.getSeconds();
        psychoJS.experiment.addData("date_within", date_within);
      End JS Experiment:
        myCompletedURL = "https://www.soscisurvey.de/lfmjl_post/?pp=" + expInfo["participant"] + "&group=" + group + "&ext="

        psychoJS.setRedirectUrls(myCompletedURL, 'about:blank');
      End JS Routine:
        d = new Date();
        date_end = d.getFullYear() +"-"+ (d.getMonth()+1) +"-"+ d.getDate() +" "+ d.getHours() +":"+ d.getMinutes() +":"+ d.getSeconds();
        psychoJS.experiment.addData("date_end", date_end);
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
  Routine instruction_task_1
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    UnknownComponent instruction_task
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      saveStartStop = False
      syncScreenRefresh = False
      useWindowParams = False
    PolygonComponent header_border1
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .44)
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent header_text1
      letterHeight = 0.05
      pos = (0, .44)
      startVal [time (s)] = 0.0
      text = Your Task
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    TextComponent info1
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = $'At the center of the study is a numerical task, i.e., a mean value computation task:\n\nIn multiple rounds, 16 numbers will appear simultaneously on your screen at random positions. Your task is to decide whether the mean of the numbers displayed is smaller than 500 or larger than 500.\n\nIf the mean is smaller than 500, please indicate this by pressing the "A" key for the answer "' + smaller + '".\n\nIf the mean is larger than 500, please indicate this by pressing the "L" key for the answer "' + larger + '".'
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    PolygonComponent continue_info1
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent continue_border1
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
      text = Please press the spacebar to continue.
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    KeyboardComponent key_resp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_task_2
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    UnknownComponent instruction_task_3
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    PolygonComponent header_border1_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .44)
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent header_text1_2
      letterHeight = 0.05
      pos = (0, .44)
      startVal [time (s)] = 0.0
      text = Your Task
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    TextComponent info1_2
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = $'For half of the rounds, the correct answer is "' + smaller +'" (i.e.,\u00A0the mean of the numbers displayed is smaller than 500). For the other half, the correct answer is "' + larger +'" (i.e.,\u00A0the mean of the numbers displayed is larger than 500).\n\nA cross will appear in the center of the screen before the numbers appear. Please keep your eyes fixed on the cross until the numbers appear in each round.\n\nYou do not have to calculate the exact mean.\nIt might be helpful to look at the first digit of the numbers displayed and count whether the majority of the digits is (a) less than\u00A05 or (b)\u00A05 or greater.'
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    PolygonComponent continue_info1_2
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent continue_border1_2
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
      text = Please press the spacebar to continue.
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    KeyboardComponent key_resp1_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine postqu
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    UnknownComponent postqu_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    PolygonComponent header_border_postqu_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .44)
      saveStartStop = False
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent header_text_postqu_2
      letterHeight = 0.05
      pos = (0, .44)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $interim_header_postqu
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    TextComponent text_postqu_2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $interim_postqu
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    PolygonComponent continue_postqu_2
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      saveStartStop = False
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent continue_border_postqu_2
      letterHeight = 0.03
      pos = (0, -.462)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $interim_footer_postqu
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    KeyboardComponent key_resp_postqu_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine setup
  Routine browser_out
  Routine instruction_task_1
  Routine instruction_task_2
  Routine instruction_practice
  Routine prep
  Routine countdown
  LoopInitiator practice_trials loopType="TrialHandler"
    loopType = sequential
    nReps = block_stim1.length
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    Routine fixaion_cross
    Routine rt_trial
    Routine feedback
    Routine ITI
  LoopTerminator practice_trials
  Routine premature_end
  Routine prep
  Routine instruction_guess
  Routine instructuon_burn1
  Routine instruction_burn2
  Routine countdown
  LoopInitiator burn_in_trials loopType="TrialHandler"
    loopType = sequential
    nReps = block_stim1.length
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    Routine fixaion_cross
    Routine rt_trial
    Routine feedback
    Routine ITI
  LoopTerminator burn_in_trials
  Routine premature_end
  Routine instructions_test1
  Routine instructions_test2
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine prep
    Routine countdown
    LoopInitiator test_trials loopType="TrialHandler"
      loopType = random
      nReps = block_stim1.length
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      Routine fixaion_cross
      Routine rt_trial
      Routine feedback
      Routine ITI
    LoopTerminator test_trials
    Routine premature_end
    Routine interim_postqu
    Routine place_fingers
  LoopTerminator trials
  Routine save_dates
  Routine interim_prequ
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine interim_qu
  LoopTerminator trials_4
  Routine postqu
  Routine save_dates
